PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = EmotionRecognition_SoloPrjct
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      pos = (-4.0, 5.0)
      startVal [time (s)] = 1.0
      text [set every repeat] = "What emotion is the child expressing?  (please select from the options below)"
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    FormComponent form
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.06
      Items = Choices.xlsx
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      pos = (0, 0.1)
      responseColor = white
      size = (1.2, 0.5)
      startVal [time (s)] = 1.0
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    ImageComponent image
      image [set every repeat] = $Image
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = (0.3, 0.1)
      startVal [time (s)] = 1.0
      text [set every repeat] = Next
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ConditionsFile_EmotionRecognition.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'Image': 'C:\\Users\\saanc\\OneDrive\\Desktop\\COURSES AU\\MAJOR\\MAJOR CORE\\PSY310 Lab In Psychology\\Solo Project\\Stimuli_EmotionRecognition\\happiness.jpg', 'CorrectAns': 'Happiness'},
      {'Image': 'C:\\Users\\saanc\\OneDrive\\Desktop\\COURSES AU\\MAJOR\\MAJOR CORE\\PSY310 Lab In Psychology\\Solo Project\\Stimuli_EmotionRecognition\\sadness.jpg', 'CorrectAns': 'Sadness'},
      {'Image': 'C:\\Users\\saanc\\OneDrive\\Desktop\\COURSES AU\\MAJOR\\MAJOR CORE\\PSY310 Lab In Psychology\\Solo Project\\Stimuli_EmotionRecognition\\anger.jpg', 'CorrectAns': 'Anger'},
      {'Image': 'C:\\Users\\saanc\\OneDrive\\Desktop\\COURSES AU\\MAJOR\\MAJOR CORE\\PSY310 Lab In Psychology\\Solo Project\\Stimuli_EmotionRecognition\\surprise.jpg', 'CorrectAns': 'Surprise'},
      {'Image': 'C:\\Users\\saanc\\OneDrive\\Desktop\\COURSES AU\\MAJOR\\MAJOR CORE\\PSY310 Lab In Psychology\\Solo Project\\Stimuli_EmotionRecognition\\fear.jpg', 'CorrectAns': 'Fear'},
      {'Image': 'C:\\Users\\saanc\\OneDrive\\Desktop\\COURSES AU\\MAJOR\\MAJOR CORE\\PSY310 Lab In Psychology\\Solo Project\\Stimuli_EmotionRecognition\\zero.jpg', 'CorrectAns': 'Neutral'}]
    Routine trial
  LoopTerminator trials
