PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1000, 1000]
  expName = Sequence
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = -0.2549, 0.2392, 0.2549
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent Line1
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent Line2
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent Line3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent Line4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent Probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine trial_2
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sequence_con.csv
    loopType = sequential
    nReps = 50
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    conditions:
      [OrderedDict([('pos', -50), ('corr_resp', 'x')]),
      OrderedDict([('pos', 150), ('corr_resp', 'v')]),
      OrderedDict([('pos', 50), ('corr_resp', 'c')]),
      OrderedDict([('pos', -150), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = sequence_con.csv
    loopType = fullRandom
    nReps = 50
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    conditions:
      [OrderedDict([('pos', -50), ('corr_resp', 'x')]),
      OrderedDict([('pos', 150), ('corr_resp', 'v')]),
      OrderedDict([('pos', 50), ('corr_resp', 'c')]),
      OrderedDict([('pos', -150), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials_2
