PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1000, 1000]
  expName = Signal_Detection
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            tilt = 0;
            corrResp = 'up'
        else:

            if random() > 0.5:
                tilt = randint(1,5)
                corrResp = 'down'
            else:
                tilt = randint(-5,-1)
                corrResp = 'down'
      End Routine:
        trials.addData('tilt',tilt)

        if random() > 0.5:
            tilt = 0;
            corrResp = 'up'
        else:

            if random() > 0.5:
                tilt = randint(1,5)
                corrResp = 'down'
            else:
                tilt = randint(-5,-1)
                corrResp = 'down'
    PolygonComponent Fixation
      fillColor = white
      shape = star7
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      sf = 5
      size = (0.3, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'up', 'down'
      correctAns = $corrResp
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
