PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Word_Priming1
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'nine'},
      {'study_word': 'apple'},
      {'study_word': 'worm'},
      {'study_word': 'ring'},
      {'study_word': 'table'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'test': 'w_ _m', 'reference': 'worm', 'condition': 'P'},
      {'test': 't_g_r', 'reference': 'tiger', 'condition': 'P'},
      {'test': 't_b_e', 'reference': 'table', 'condition': 'P'},
      {'test': 's_o_d', 'reference': 'sword', 'condition': 'NP'},
      {'test': 'p_p_r', 'reference': 'paper', 'condition': 'NP'},
      {'test': 'n_ne', 'reference': 'nine', 'condition': 'P'},
      {'test': 'h_r_e', 'reference': 'horse', 'condition': 'NP'},
      {'test': 'f_o_e_', 'reference': 'flower', 'condition': 'NP'},
      {'test': 'f_ _ e', 'reference': 'fire', 'condition': 'NP'},
      {'test': 'cl_c_', 'reference': 'clock', 'condition': 'NP'},
      {'test': 'c_s_i_n', 'reference': 'cushion', 'condition': 'P'},
      {'test': 'c_m_ _ a', 'reference': 'camera', 'condition': 'NP'},
      {'test': 'ap_l_ ', 'reference': 'apple', 'condition': 'P'},
      {'test': 'a_ _ y', 'reference': 'army', 'condition': 'NP'},
      {'test': '_oo_', 'reference': 'book', 'condition': 'P'},
      {'test': '_ian_', 'reference': 'piano', 'condition': 'P'},
      {'test': '_i_g', 'reference': 'ring', 'condition': 'P'},
      {'test': '_es_', 'reference': 'desk', 'condition': 'NP'},
      {'test': '_a_e', 'reference': 'vase', 'condition': 'P'},
      {'test': '_ _ ll', 'reference': 'cell', 'condition': 'NP'}]
    Routine test
  LoopTerminator trials_2
